PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 800]
  expName = word_priming_exp
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    TextComponent StudyText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent Studyslider
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      labels = "familiar", "unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test_2
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    TextComponent Test_Text
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent submit_text
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = click to submit
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    MouseComponent test_mouse
      clickable = submit_text
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'phone'},
      {'study_word': 'marble'},
      {'study_word': 'board'},
      {'study_word': 'laptop'},
      {'study_word': 'chart'},
      {'study_word': 't-shirt'},
      {'study_word': 'mouse'},
      {'study_word': 'pastry'},
      {'study_word': 'case'},
      {'study_word': 'cruise'},
      {'study_word': 'police'},
      {'study_word': 'keys'},
      {'study_word': 'poster'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test': 'l_pt_p', 'Reference': 'Laptop', 'old_new': 'old'},
      {'test': '_ha_t', 'Reference': 'Chart', 'old_new': 'old'},
      {'test': 't_hi_t', 'Reference': 'tshirt', 'old_new': 'old'},
      {'test': '_ou_se', 'Reference': 'mouse', 'old_new': 'old'},
      {'test': 'P_as_tr_', 'Reference': 'pastry', 'old_new': 'old'},
      {'test': 'c_s_', 'Reference': 'case', 'old_new': 'old'},
      {'test': '_ru_is_', 'Reference': 'cruise', 'old_new': 'old'},
      {'test': 'P_li_e', 'Reference': 'police', 'old_new': 'old'},
      {'test': 'K_y_', 'Reference': 'keys', 'old_new': 'old'},
      {'test': 'P_st_r', 'Reference': 'poster', 'old_new': 'old'},
      {'test': '_o_rd', 'Reference': 'board', 'old_new': 'old'},
      {'test': '_a_bl_', 'Reference': 'marble', 'old_new': 'old'},
      {'test': '_ho_e', 'Reference': 'phone', 'old_new': 'old'},
      {'test': '_oo_', 'Reference': 'book', 'old_new': 'new'},
      {'test': 'c_s_io_', 'Reference': 'cushion', 'old_new': 'new'},
      {'test': 'ta_l_', 'Reference': 'table', 'old_new': 'new'},
      {'test': 'P_nc_l', 'Reference': 'pencil', 'old_new': 'new'},
      {'test': 'v_s_', 'Reference': 'vase', 'old_new': 'new'},
      {'test': 'Bo_t_e', 'Reference': 'bottle', 'old_new': 'new'},
      {'test': 'C_m_ra', 'Reference': 'camera', 'old_new': 'new'}]
    Routine test_2
  LoopTerminator trials_2
